PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = Surface
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  expName = EEG_TargetDetection_Experiment
  keyboardBackend = ioHub
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Routines
  Routine Sequence
    ImageComponent Images
      flipHoriz = True
      image [set every repeat] = $current_images_list
      size = (win.size)[0], (win.size)[1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent Cross
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    PolygonComponent Rectangle
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      opacity = 0
      shape = rectangle
      size = (win.size)[0], (win.size)[1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      units = pix
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  Routine Response
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Did the target presents?

        Yes? Press y

        No? Press n
    KeyboardComponent key_resp
      allowedKeys = 'y' ,'n'
      correctAns = $cur_correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    CodeComponent Calculate_cor
      Code Type = Py
      End Routine:
        if key_resp.corr:
            num_correct += 1        #Record how many times the participants reponse correctly
  Routine Preload
    CodeComponent Get_Images_list
      Code Type = Py
      Begin Routine:
        #Load the randomized images matrix,
        #each row of the matrix represents a sequence of images,
        #each element should contain a image number,
        #The code below loads the corresponding row of trial from the matrix,
        #please change the path below
        cur_sequence = pd.read_csv(r'C:\Users\15202\OneDrive\C_\University of Amsterdam\Intern\Randomized matrix.csv', header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) )
        cur_sequence_images = [Images_name_list[cur_sequence.iloc[0, i]] for i in range(images_per_trial) ]     #Use the indexs to get the images' name
        cur_sequence_images = [ "Pictures\\" + i for i in cur_sequence_images]      #I stoerd all the images in the Picture folder, the path can be changed according to your case

        #Load the csv file which contain the correct answers for each trial,
        #each row contains one answer for a trial, the value should be either 'y' or 'n',
        #The code below loads the corresponding row of trial from the file,
        #please change the path below
        cur_correct = pd.read_csv(r'C:\Users\15202\OneDrive\C_\University of Amsterdam\Intern\Correct_answers.csv', header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) )
        cur_correct = cur_correct[0][0]     #Get the correct answer
        eeg_trial_num += 1      #Increase the trial index

        cur_trial_data = {'current_images_list' : cur_sequence_images}
        cur_sequence_images = pd.DataFrame(cur_trial_data)      #Convert the sequence into DataFrame

        #Save the current images list into the loop file
        cur_sequence_images.to_csv(r'C:\Users\15202\OneDrive\C_\University of Amsterdam\Intern\loopTemplate.csv',index=False)
    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['$s1']
      startVal [time (s)] = 0
  Routine Blank
    PolygonComponent blank
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (win.size)[0], (win.size)[1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    PolygonComponent polygon
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Introduction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Intro
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  Routine Shuffle_Images
    CodeComponent code
      Code Type = Py
      Begin Routine:
        #import pandas as pd
        #df = pd.read_csv(r'C:\Users\15202\anaconda3\envs\psychopy\Lib\site-packages\psychopy\experiment\Picture_list.csv', header = None)
        #df = df.sample(frac = 1).reset_index(drop = True)
        #sequence_num = 0
  Routine Feedback
    CodeComponent accuracy_rate
      Code Type = Py
      Begin Routine:
        num_correct = round( (num_correct / trials_per_block) * 100 , 2)       #Calculate accuracy rate
        accuracy_rate = str("Your accuracy rate is ") + str(num_correct) + str("%")
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $accuracy_rate
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  Routine End
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = End of one block
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  Routine Initialization
    CodeComponent Initialization_code
      Code Type = Py
      Begin Routine:
        import pandas as pd
        import os

        eeg_trial_num = 0   #Track with the current trial
        images_per_trial = 3
        trials_per_block = 5
        blocks_per_repetition = 1
        total_repetition = 1
        total_blocks = blocks_per_repetition * total_repetition
        max_trial = trials_per_block * blocks_per_repetition * total_repetition #The maximum of trials

        #Get the list of all images' file name
        #Please change the path below
        Images_name_list = os.listdir(r"C:\Users\15202\OneDrive\C_\University of Amsterdam\Intern\Pictures")

        # NOTICE: The Images from the list are not in numerical order,
        # i.e. the third element is "10.tiff" but not "2.tiff"
        # In the testing case (and also formal experiment), this would not cause any problem.
        # However, if we need to use these indices to track with specific images,
        # use the command below to sort the list
        # (make sure the prefix of file name is number only).

        #sorted(Images_name_list, key = lambda item: int(item.split(".")[0]))
  Routine Correctness_Initialization
    CodeComponent Cor_initialization
      Code Type = Py
      Begin Routine:
        num_correct = 0     #For every block, initialize the number of correct answers
Flow
  Routine Initialization
  LoopInitiator Repetition loopType="TrialHandler"
    loopType = sequential
    nReps = total_repetition
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    Routine Introduction
    LoopInitiator Blocks loopType="TrialHandler"
      loopType = sequential
      nReps = blocks_per_repetition
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      Routine Correctness_Initialization
      LoopInitiator Trials loopType="TrialHandler"
        loopType = sequential
        nReps = trials_per_block
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        Routine Preload
        Routine Blank
        LoopInitiator Sequences loopType="TrialHandler"
          conditionsFile = loopTemplate.csv
          loopType = random
          nReps = 1
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          conditions:
            [OrderedDict([('s1', 'Pictures/0.tiff')]),
            OrderedDict([('s1', 'Pictures/1.tiff')]),
            OrderedDict([('s1', 'Pictures/2.tiff')])]
          Routine Sequence
        LoopTerminator Sequences
        Routine Response
      LoopTerminator Trials
      Routine Feedback
      Routine End
    LoopTerminator Blocks
  LoopTerminator Repetition
